PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'age': '', 'gender': '', 'participant': '', 'UseMonkey': 'n'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 3.0.5
  Window size (pixels) = [1600, 900]
  color = white
  expName = ec_RRR
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Routines
  Routine surveillance_trial
    KeyboardComponent learning_phase_response
      allowedKeys = 'space', 'None'
      correctAns = $correct_response
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = surveillance_duration
      store = first key
      storeCorrect = True
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    ImageComponent learning_phase_image
      durationEstim = 1.5
      image [set every repeat] = $stimulus
      size = (1.78, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = surveillance_duration
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  Routine surveillance_instructions_2
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        # dependencies
        from numpy.random import randint
        from psychopy.hardware.emulator import ResponseEmulator

        # randomly assign to condition
        condition_randomisation = randint(1, 3, size = 1)
        if condition_randomisation == 1:
            condition = "CS1_USpos"
        elif condition_randomisation == 2:
            condition = "CS1_USneg"

        # auto response monkey
        if str(expInfo['UseMonkey']) == 'y':
            monkey = True
            surveillance_duration = 0.1
        else:
            monkey = False
            surveillance_duration = 1.5
      Begin Routine:
        file_name = "trials/trials_participant_" + str(expInfo['participant']) + "_condition_" + condition + "_" + block_id + "_.csv"

        # simulate responses using ResponseEmulator, for testing
        if monkey:
            simulated_responses = [(1, 'space')]
            responder = ResponseEmulator(simulated_responses)
            responder.start()
    KeyboardComponent key_resp_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent example
      image [set every repeat] = $example_image
      pos = (0, 0.05)
      size = (0.3, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_instructions_top
      color = black
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text_top
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    TextComponent text_instructions_bottom
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text_bottom
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  Routine distractor_1
    CodeComponent code_distractor_1
      Code Type = Py
      Begin Routine:
        # simulate responses using ResponseEmulator, for testing
        if monkey:
            simulated_responses = [(0.3, '3'), (0.4, 'return')]
            responder = ResponseEmulator(simulated_responses)
            responder.start()
    RatingScaleComponent distractor_1_rating
      customize_everything = lineColor='Black', textColor='Black'
      forceEndRoutine = True
      high = 7
      labels = Strong disagreement, Strong agreement
      low = 1
      pos = 0, -0.4
      size = 2.0
      startVal [time (s)] = 0.0
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    TextComponent distractor_1_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $distractor_1_items
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  Routine distractor_2
    CodeComponent code_distractor_2
      Code Type = Py
      Begin Routine:
        # simulate responses using ResponseEmulator, for testing
        if monkey:
            simulated_responses = [(0.3, '3'), (0.4, 'return')]
            responder = ResponseEmulator(simulated_responses)
            responder.start()
    RatingScaleComponent distractor_2_rating
      customize_everything = lineColor='Black', textColor='Black'
      forceEndRoutine = True
      high = 7
      labels = Extremely uncharacteristic, Extremely characteristic
      low = 1
      pos = 0, -0.4
      size = 2.0
      startVal [time (s)] = 0.0
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    TextComponent distractor_2_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $distractor_2_items
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  Routine instructions
    CodeComponent code_instructions
      Code Type = Py
      Begin Routine:
        # simulate responses using ResponseEmulator, for testing
        if monkey:
            simulated_responses = [(2, 'space')]
            responder = ResponseEmulator(simulated_responses)
            responder.start()
    KeyboardComponent instructions_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_instructions
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
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Flow
  LoopInitiator surveillance_instructions_loop loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions
  LoopTerminator surveillance_instructions_loop
  LoopInitiator surveillance_blocks_loop loopType="TrialHandler"
    conditionsFile = instructions_surveillance.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('instructions_text_top', 'For this task, the target creature is Crandios:'), ('instructions_text_bottom', 'So whenever Crandios (his name or his picture) appears on the screen, hit the spacebar as quickly as possible. Hit the spacebar whenever you see an image of Crandio or the word CRANDIOS. \n\nPress the spacebar to start the this task'), ('block_id', 'target1'), ('example_image', 'stimuli/t1.jpg')]),
      OrderedDict([('instructions_text_top', 'For this task, the target creature is Shelmet:'), ('instructions_text_bottom', 'So whenever Shelmet (his name or his picture) appears on the screen, hit the spacebar as quickly as possible. Hit the spacebar whenever you see an image of Shelmet or the word SHELMET. \n\nPress the spacebar to start the this task'), ('block_id', 'target2'), ('example_image', 'stimuli/t2.jpg')]),
      OrderedDict([('instructions_text_top', 'For this task, the target creature is Grubbin:'), ('instructions_text_bottom', 'So whenever Grubbin (his name or his picture) appears on the screen, hit the spacebar as quickly as possible. Hit the spacebar whenever you see an image of Grubbin or the word GRUBBIN. \n\nPress the spacebar to start the this task'), ('block_id', 'target3'), ('example_image', 'stimuli/t3.jpg')]),
      OrderedDict([('instructions_text_top', 'For this task, the target creature is Magearna:'), ('instructions_text_bottom', 'So whenever Magerana (his name or his picture) appears on the screen, hit the spacebar as quickly as possible. Hit the spacebar whenever you see an image of MAGEARNA or the word MAGERANA. \n\nPress the spacebar to start the this task'), ('block_id', 'target4'), ('example_image', 'stimuli/t4.jpg')])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
    Routine surveillance_instructions_2
    LoopInitiator surveillance_trials_loop loopType="TrialHandler"
      conditionsFile = $file_name
      loopType = sequential
      nReps = 1
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      Routine surveillance_trial
    LoopTerminator surveillance_trials_loop
  LoopTerminator surveillance_blocks_loop
  LoopInitiator distractor_1_instructions_loop loopType="TrialHandler"
    Selected rows = 3:5
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructions_text', "Imagine that you are a security guard watching for deviant activity at a business. Your job requires that you pay attention at all times, and respond quickly when something suspicious happens.  \n\nIn our lab we study attention and rapid responding, and in this experiment you'll be asked to play the role of the security guard. \n\nSpecifically, you will be attending to a number of items presented on the computer screen, and you'll be responding as quickly as  possible when a target item appears by pressing the spacebar.  \n\n\nPress the spacebar to continue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,
      OrderedDict([('instructions_text', "The target item will appear at random several times throughout the experiment. The target item may appear as an image or as a name.  So be sure to pay attention at all times and focus on the screen, because you never know when the target item will appear.  \n\nA number of filler items that we've selected from our stimulus pool will also be shown randomly to make the task more challenging. These distractors are both pictures and words that were just randomly picked from our collection.  \n\nSometimes two images will appear on the screen at the same time, and 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,
      OrderedDict([('instructions_text', 'The items will be displayed rapidly, so make sure that when you see a target, you hit the spacebar before it disappears.  \n\nAgain, be sure to pay close attention throughout the experiment so that you can respond as quickly and accurately as possible.  \n\nThere will be five separate surveillance tasks of about 4 minutes each.  \n\nEach task will have a different target, and all of the target items will be cartoon creatures. \n\n\nPress the spacebar to continue.')])]
    Routine instructions
  LoopTerminator distractor_1_instructions_loop
  LoopInitiator distractor_1_loop loopType="TrialHandler"
    conditionsFile = distractor_1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('distractor_1_items', 'I would prefer complex to simple problems.\n\n1 = strong disagreement\n2 = moderate disagreement\n3 = slight disagreement\n4 = neither agreement nor disagreement\n5 = slight agreement\n6 = moderate agreement\n7 = strong agreement')]),
      OrderedDict([('distractor_1_items', 'I like to have the responsibility of handling a situation that requires a lot of thinking.\n\n1 = strong disagreement\n2 = moderate disagreement\n3 = slight disagreement\n4 = neither agreement nor disagreement\n5 = slight agreement\n6 = moderate agreement\n7 = strong agreement')]),
      OrderedDict([('distractor_1_items', 'Thinking is not my idea of fun.\n\n1 = strong disagreement\n2 = moderate disagreement\n3 = slight disagreement\n4 = neither agreement nor disagreement\n5 = slight agreement\n6 = moderate agreement\n7 = strong agreement')]),
      OrderedDict([('distractor_1_items', 'I would rather do something that requires little thought than something that is sure to challenge my thinking abilities.\n\n1 = strong disagreement\n2 = moderate disagreement\n3 = slight disagreement\n4 = neither agreement nor disagreement\n5 = slight agreement\n6 = moderate agreement\n7 = strong agreement')])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
    Routine distractor_1
  LoopTerminator distractor_1_loop
  LoopInitiator distractor_2_instructions_loop loopType="TrialHandler"
    Selected rows = 5:6
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine instructions
  LoopTerminator distractor_2_instructions_loop
  LoopInitiator distractor_2_loop loopType="TrialHandler"
    conditionsFile = distractor_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('distractor_2_items', 'I form opinions about everything.\n\n1 = extremely uncharacteristic\n2 = slightly uncharacteristic\n3 = neither characteristic nor uncharacteristic\n4 = slightly characteristic\n5 = extremely characteristic')]),
      OrderedDict([('distractor_2_items', 'I prefer to avoid taking extreme positions.\n\n1 = extremely uncharacteristic\n2 = slightly uncharacteristic\n3 = neither characteristic nor uncharacteristic\n4 = slightly characteristic\n5 = extremely characteristic')]),
      OrderedDict([('distractor_2_items', 'It is very important to me to hold strong opinions.\n\n1 = extremely uncharacteristic\n2 = slightly uncharacteristic\n3 = neither characteristic nor uncharacteristic\n4 = slightly characteristic\n5 = extremely characteristic')]),
      OrderedDict([('distractor_2_items', 'I want to know exactly what is good and bad about everything.\n\n1 = extremely uncharacteristic\n2 = slightly uncharacteristic\n3 = neither characteristic nor uncharacteristic\n4 = slightly characteristic\n5 = extremely characteristic')]),
      OrderedDict([('distractor_2_items', 'I often prefer to remain neutral about complex issues.\n\n1 = extremely uncharacteristic\n2 = slightly uncharacteristic\n3 = neither characteristic nor uncharacteristic\n4 = slightly characteristic\n5 = extremely characteristic')])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
    Routine distractor_2
  LoopTerminator distractor_2_loop
